PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = PS6
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Routines
  Routine Instructions
    TextComponent Instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see images of animals on the screen. Press the left arrow key if the image is a bear. Press the right arrow key if the image is a hippo. Make your response as quickly as possible.


        PRESS ANY KEY TO CONTINUE
    KeyboardComponent key_resp_instruc
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    ImageComponent image
      image [set every repeat] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    KeyboardComponent key_resp
      allowedKeys = 'left' , 'right'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        picturefile = ['correct.jpeg' , 'incorrect.jpeg']
      Begin Routine:
        if key_resp.corr:
            picture = picturefile[0]
        else:
            picture = picturefile[1]
    ImageComponent feedback_2
      image [set every repeat] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = picturestim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('picture', 'picturefiles/sketch_bear.jpeg'), ('correct', 'left')]),
      OrderedDict([('picture', 'picturefiles/sketch_bear_2.jpeg'), ('correct', 'left')]),
      OrderedDict([('picture', 'picturefiles/sketch_hippo.jpeg'), ('correct', 'right')]),
      OrderedDict([('picture', 'picturefiles/sketch_hippo_2.jpeg'), ('correct', 'right')])]
    Routine Trial
    Routine feedback
  LoopTerminator trials
